PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = new_music_therapy
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $song
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        song playing

        space to end
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = isi
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  Routine intro
    CodeComponent handle_songs
      Code Type = Py
      Begin Experiment:
        import os
        import pandas as pd

        sub = expInfo['participant']
        ses = expInfo['session']
        trigger = '5' #CHANGE THIS IF YOU NEED TO

        song_titles = os.listdir('songs')

        songs = []
        for song in song_titles:
            songs.append(f'songs/{song}')
        songs_pd = pd.Series(songs, index = None, name = 'song')
        songs_pd.to_csv(f'sub-{sub}_ses-{ses}_songs.csv', header = True, index = False)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        we will now do a soundcheck

        press space to proceed
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine soundcheck
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        soundcheck

        press space to stop
  Routine sound_repeat
    CodeComponent repeat
      Code Type = Py
      Each Frame:
        if key_resp_7.keys == 'right':
            soundcheck_loop.finished = True
            continueRoutine = False

        if key_resp_7.keys == 'left':
            continueRoutine = False
    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = left to repeat right to proceed with experiment
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  Routine instructions
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        task instructions

        press space to proceed
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_for_scanner
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = $trigger
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 45
      startVal [time (s)] = 0.0
      text = Waiting for scanner...
      wrapWidth = 1000
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  Routine ending
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        finished
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ending_2
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = experiment is over
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine waiting_for_scanner
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = waiting for scanner...
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    KeyboardComponent key_resp_8
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator soundcheck_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine intro
    Routine soundcheck
    Routine sound_repeat
  LoopTerminator soundcheck_loop
  Routine instructions
  Routine waiting_for_scanner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'sub-{sub}_ses-{ses}_songs.csv'
    loopType = random
    nReps = 1
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    Routine trial
    Routine isi
  LoopTerminator trials
  Routine ending
